! ispyb web service request time: {{"%.2f"|format(metadata.webservice_request_time)}}s
! generated {{metadata.timestamp}}
! X-Ray data collected at: ESRF_ID23-1
   
   JOB= ALL !XYCORR INIT COLSPOT IDXREF DEFPIX XPLAN INTEGRATE CORRECT
   !JOB= DEFPIX XPLAN INTEGRATE CORRECT
   
   DATA_RANGE= {{datacollect.startImageNumber}} {{datacollect.startImageNumber + datacollect.numberOfImages - 1}}
{%if datacollect.numberOfImages >= 4 %}
   BACKGROUND_RANGE= {{datacollect.startImageNumber}} {{datacollect.startImageNumber + 3}}
   SPOT_RANGE= {{datacollect.startImageNumber}} {{datacollect.startImageNumber + 3}}
{%else%}
   BACKGROUND_RANGE= {{datacollect.startImageNumber}} {{datacollect.startImageNumber + datacollect.numberOfImages - 1}}
   SPOT_RANGE= {{datacollect.startImageNumber}} {{datacollect.startImageNumber + datacollect.numberOfImages - 1}}
{%endif%}
   ! additional spot range
   {%if datacollect.additionalSpotRange is defined and datacollect.numberOfImages >= 90%}
   SPOT_RANGE= {{datacollect.additionalSpotRange}}
   {%endif%}
   
   SECONDS=60
   MINIMUM_NUMBER_OF_PIXELS_IN_A_SPOT= 6
   STRONG_PIXEL= 6.0
   
   OSCILLATION_RANGE= {{datacollect.axisRange}}
   STARTING_ANGLE= {{datacollect.axisStart}}
   STARTING_FRAME= {{datacollect.startImageNumber}}
   X-RAY_WAVELENGTH= {{"%.5f"|format(datacollect.wavelength)}}
   NAME_TEMPLATE_OF_DATA_FRAMES= {{datacollect.fileTemplate}}
   
   !STARTING_ANGLES_OF_SPINDLE_ROTATION= 0 180 10 
   !TOTAL_SPINDLE_ROTATION_RANGES= 60 180 10 
   
   DETECTOR_DISTANCE= {{"%.2f"|format(datacollect.detectorDistance)}}
   DETECTOR= {{detector.detectorType|upper}} MINIMUM_VALID_PIXEL_VALUE= 1   OVERLOAD= 65000
   ORGX= {{"%.2f"|format(1000*(datacollect.ybeam / detector.detectorPixelSizeVertical))}} ORGY= {{"%.2f"|format(1000*(datacollect.xbeam / detector.detectorPixelSizeHorizontal))}}
   NX=  3072   NY=  3072   QX= {{"%.4f"|format(detector.detectorPixelSizeHorizontal / 1000)}} QY= {{"%.4f"|format(detector.detectorPixelSizeVertical / 1000)}}
   VALUE_RANGE_FOR_TRUSTED_DETECTOR_PIXELS= 7000 30000
   
   DIRECTION_OF_DETECTOR_X-AXIS= 1.0 0.0 0.0
   DIRECTION_OF_DETECTOR_Y-AXIS= 0.0 1.0 0.0
   ROTATION_AXIS= 1.0 0.0 0.0
   INCIDENT_BEAM_DIRECTION= 0.0 0.0 1.0
   FRACTION_OF_POLARIZATION= {{"%.2f"|format(blsetup.polarisation)}}
   POLARIZATION_PLANE_NORMAL= 0.0 1.0 0.0
   !== Default value recommended
   !AIR= 0.00030487
   
   SPACE_GROUP_NUMBER= 0
   UNIT_CELL_CONSTANTS= 0 0 0 0 0 0
   INCLUDE_RESOLUTION_RANGE= 50.0 0.0
   !RESOLUTION_SHELLS= 15.0 8.0 4.0 2.8 2.4
   !FRIEDEL'S_LAW= FALSE ! default is true
   !STRICT_ABSORPTION_CORRECTION=TRUE
 
   TRUSTED_REGION= 0 1.40 
   
   REFINE(INTEGRATE)= BEAM ORIENTATION CELL
   !== Default value recommended
   !DELPHI= 3.000
   MAXIMUM_NUMBER_OF_PROCESSORS= 16
   !MAXIMUM_NUMBER_OF_JOBS= 16
