! ispyb web service request time: {{"%.2f"|format(metadata.webservice_request_time)}}s
! generated {{metadata.timestamp}}

   JOB= ALL !XYCORR INIT COLSPOT IDXREF DEFPIX XPLAN INTEGRATE CORRECT
   !JOB= DEFPIX XPLAN INTEGRATE CORRECT

!### i would add also a !JOB= CORRECT

   
   DATA_RANGE= {{datacollect.startImageNumber}} {{datacollect.startImageNumber + datacollect.numberOfImages - 1}}

!### this is given by _INPUTS["frame_first"], _DP_INPUTS["frame_first"]+3,\ 
!### replaced by something like "first frame", (1/oscillation_range)*4

   {%if datacollect.numberOfImages >= 20 %}
   SPOT_RANGE= {{datacollect.startImageNumber}} {{datacollect.startImageNumber + 3/datacollect.axisRange}}
   {%else%}
   SPOT_RANGE= {{datacollect.startImageNumber}} {{datacollect.startImageNumber + datacollect.numberOfImages - 1}}
   {%endif%}

   {%if datacollect.additionalSpotRange is defined and datacollect.numberOfImages >= 90%}
   SPOT_RANGE= {{datacollect.additionalSpotRange}}
   {%endif%}
!### this need to be uncommented
!### and be replaced by something like
!### last_image/2 - (1/oscillation_range)*4, last_image/2

   {%if datacollect.numberOfImages >= 4 %}
   BACKGROUND_RANGE= {{datacollect.startImageNumber}} {{datacollect.startImageNumber + 3}}
   {%else%}
   BACKGROUND_RANGE= {{datacollect.startImageNumber}} {{datacollect.startImageNumber + datacollect.numberOfImages - 1}}
   {%endif%}

   !masking non sensitive area of Pilatus
   UNTRUSTED_RECTANGLE= 487  495     0 2528
   UNTRUSTED_RECTANGLE= 981  989     0 2528
   UNTRUSTED_RECTANGLE=1475 1483     0 2528
   UNTRUSTED_RECTANGLE=1969 1977     0 2528
   UNTRUSTED_RECTANGLE=   0 2464   195  213
   UNTRUSTED_RECTANGLE=   0 2464   407  425
   UNTRUSTED_RECTANGLE=   0 2464   619  637
   UNTRUSTED_RECTANGLE=   0 2464   831  849
   UNTRUSTED_RECTANGLE=   0 2464  1043 1061
   UNTRUSTED_RECTANGLE=   0 2464  1255 1273
   UNTRUSTED_RECTANGLE=   0 2464  1467 1485
   UNTRUSTED_RECTANGLE=   0 2464  1679 1697
   UNTRUSTED_RECTANGLE=   0 2464  1891 1909
   UNTRUSTED_RECTANGLE=   0 2464  2103 2121
   UNTRUSTED_RECTANGLE=   0 2464  2315 2333
   TRUSTED_REGION=0.0 1.41 !Relative radii limiting trusted detector region
   
   !correction tables to compensate the misorientations of the modules
   X-GEO_CORR= ../x_geo_corr.cbf
   Y-GEO_CORR= ../y_geo_corr.cbf
   
   SECONDS=600
   MINIMUM_NUMBER_OF_PIXELS_IN_A_SPOT= 4

!### can be 3 for pilatus

   !STRONG_PIXEL= 3.0
   
   OSCILLATION_RANGE= {{datacollect.oscillationRange}}
   STARTING_ANGLE= {{datacollect.axisStart}}
   STARTING_FRAME= {{datacollect.startImageNumber}}
   X-RAY_WAVELENGTH=  {{datacollect.wavelength}}
   NAME_TEMPLATE_OF_DATA_FRAMES= {{datacollect.fileTemplate}} !CBF
   
   !STARTING_ANGLES_OF_SPINDLE_ROTATION= 0 180 10 
   !TOTAL_SPINDLE_ROTATION_RANGES= 60 180 10 

!### as we are using default we can remove this, what do you think?

   
   DETECTOR_DISTANCE= {{detector.detectorDistance}}
   DETECTOR= {{detector.detectorManufacturer}}
   !MINIMUM_VALID_PIXEL_VALUE= %d ! check if we have that on ispyb
   MINIMUM_VALID_PIXEL_VALUE= 1.0 ! check if we have that on ispyb
   OVERLOAD= 1048500

!### overload is really not necessary, is more for user education


   SENSOR_THICKNESS=0.32
   ORGX= {{"%.2f"|format(datacollect.ybeam / detector.detectorPixelSizeVertical)}} ORGY= {{"%.2f"|format(datacollect.xbeam / detector.detectorPixelSizeHorizontal)}}
   ! check in ispyb
   !NX=  %d   NY=  %d
   QX= {{"%.4f"|format(detector.detectorPixelSizeHorizontal / 1000)}}  QY= {{"%.4f"|format(detector.detectorPixelSizeVertical / 1000)}}
   VALUE_RANGE_FOR_TRUSTED_DETECTOR_PIXELS= 7000 30000
   
   DIRECTION_OF_DETECTOR_X-AXIS= 1.0 0.0 0.0
   DIRECTION_OF_DETECTOR_Y-AXIS= 0.0 1.0 0.0
   ROTATION_AXIS= 1.0 0.0 0.0
   INCIDENT_BEAM_DIRECTION= 0.0 0.0 1.0
   FRACTION_OF_POLARIZATION= {{"%.2f" | format(blsetup.polarisation)}}
   POLARIZATION_PLANE_NORMAL= 0.0 1.0 0.0
   !== Default value recommended
   !AIR= %.8f
   
   SPACE_GROUP_NUMBER= 0
   UNIT_CELL_CONSTANTS= 0 0 0 0 0 0
   INCLUDE_RESOLUTION_RANGE= 50.0 0.0
   !RESOLUTION_SHELLS= 15.0 8.0 4.0 2.8 2.4
   !FRIEDEL\'S_LAW= FALSE !default is TRUE
   !STRICT_ABSORPTION_CORRECTION=TRUE
    
   REFINE(INTEGRATE)= BEAM ORIENTATION CELL
   !== Default value recommended
   !DELPHI= %.3f
   MAXIMUM_NUMBER_OF_PROCESSORS= 16
   !MAXIMUM_NUMBER_OF_JOBS= 16

